
/gate/source/addSource 					Y90Source
/gate/source/Y90Source/setActivity 		{SourceActivity}
/gate/source/Y90Source/gps/particle 	e-
/gate/source/Y90Source/gps/energytype 	Arb
/gate/source/Y90Source/gps/histname 	arb
/gate/source/Y90Source/gps/emin 		0. keV
/gate/source/Y90Source/gps/emax 		2284. keV


/gate/source/Y90Source/gps/histpoint    0.002  333
/gate/source/Y90Source/gps/histpoint    0.004  333
/gate/source/Y90Source/gps/histpoint    0.010  336
/gate/source/Y90Source/gps/histpoint    0.017  340
/gate/source/Y90Source/gps/histpoint    0.023  340
/gate/source/Y90Source/gps/histpoint    0.030  349
/gate/source/Y90Source/gps/histpoint    0.036  353
/gate/source/Y90Source/gps/histpoint    0.043  358
/gate/source/Y90Source/gps/histpoint    0.050  363
/gate/source/Y90Source/gps/histpoint    0.056  368
/gate/source/Y90Source/gps/histpoint    0.063  373
/gate/source/Y90Source/gps/histpoint    0.069  377
/gate/source/Y90Source/gps/histpoint    0.076  383
/gate/source/Y90Source/gps/histpoint    0.082  387
/gate/source/Y90Source/gps/histpoint    0.089  393
/gate/source/Y90Source/gps/histpoint    0.095  397
/gate/source/Y90Source/gps/histpoint    0.102  402
/gate/source/Y90Source/gps/histpoint    0.108  407
/gate/source/Y90Source/gps/histpoint    0.115  412
/gate/source/Y90Source/gps/histpoint    0.121  417
/gate/source/Y90Source/gps/histpoint    0.128  422
/gate/source/Y90Source/gps/histpoint    0.135  427
/gate/source/Y90Source/gps/histpoint    0.141  431
/gate/source/Y90Source/gps/histpoint    0.148  436
/gate/source/Y90Source/gps/histpoint    0.154  440
/gate/source/Y90Source/gps/histpoint    0.161  445
/gate/source/Y90Source/gps/histpoint    0.167  449
/gate/source/Y90Source/gps/histpoint    0.174  454
/gate/source/Y90Source/gps/histpoint    0.180  458
/gate/source/Y90Source/gps/histpoint    0.187  462
/gate/source/Y90Source/gps/histpoint    0.193  466
/gate/source/Y90Source/gps/histpoint    0.200  471
/gate/source/Y90Source/gps/histpoint    0.207  475
/gate/source/Y90Source/gps/histpoint    0.213  479
/gate/source/Y90Source/gps/histpoint    0.220  483
/gate/source/Y90Source/gps/histpoint    0.226  487
/gate/source/Y90Source/gps/histpoint    0.233  491
/gate/source/Y90Source/gps/histpoint    0.239  494
/gate/source/Y90Source/gps/histpoint    0.246  498
/gate/source/Y90Source/gps/histpoint    0.252  502
/gate/source/Y90Source/gps/histpoint    0.259  505
/gate/source/Y90Source/gps/histpoint    0.265  509
/gate/source/Y90Source/gps/histpoint    0.272  512
/gate/source/Y90Source/gps/histpoint    0.278  516
/gate/source/Y90Source/gps/histpoint    0.285  519
/gate/source/Y90Source/gps/histpoint    0.292  523
/gate/source/Y90Source/gps/histpoint    0.298  526
/gate/source/Y90Source/gps/histpoint    0.305  529
/gate/source/Y90Source/gps/histpoint    0.311  532
/gate/source/Y90Source/gps/histpoint    0.318  535
/gate/source/Y90Source/gps/histpoint    0.324  538
/gate/source/Y90Source/gps/histpoint    0.331  541
/gate/source/Y90Source/gps/histpoint    0.337  544
/gate/source/Y90Source/gps/histpoint    0.344  547
/gate/source/Y90Source/gps/histpoint    0.350  549
/gate/source/Y90Source/gps/histpoint    0.357  552
/gate/source/Y90Source/gps/histpoint    0.363  555
/gate/source/Y90Source/gps/histpoint    0.370  557
/gate/source/Y90Source/gps/histpoint    0.377  560
/gate/source/Y90Source/gps/histpoint    0.383  562
/gate/source/Y90Source/gps/histpoint    0.390  565
/gate/source/Y90Source/gps/histpoint    0.396  567
/gate/source/Y90Source/gps/histpoint    0.403  570
/gate/source/Y90Source/gps/histpoint    0.409  572
/gate/source/Y90Source/gps/histpoint    0.416  574
/gate/source/Y90Source/gps/histpoint    0.422  576
/gate/source/Y90Source/gps/histpoint    0.429  578
/gate/source/Y90Source/gps/histpoint    0.435  580
/gate/source/Y90Source/gps/histpoint    0.442  583
/gate/source/Y90Source/gps/histpoint    0.448  584
/gate/source/Y90Source/gps/histpoint    0.455  586
/gate/source/Y90Source/gps/histpoint    0.462  588
/gate/source/Y90Source/gps/histpoint    0.468  590
/gate/source/Y90Source/gps/histpoint    0.475  592
/gate/source/Y90Source/gps/histpoint    0.481  594
/gate/source/Y90Source/gps/histpoint    0.488  595
/gate/source/Y90Source/gps/histpoint    0.494  597
/gate/source/Y90Source/gps/histpoint    0.501  599
/gate/source/Y90Source/gps/histpoint    0.507  600
/gate/source/Y90Source/gps/histpoint    0.514  602
/gate/source/Y90Source/gps/histpoint    0.520  603
/gate/source/Y90Source/gps/histpoint    0.527  604
/gate/source/Y90Source/gps/histpoint    0.534  606
/gate/source/Y90Source/gps/histpoint    0.540  607
/gate/source/Y90Source/gps/histpoint    0.547  608
/gate/source/Y90Source/gps/histpoint    0.553  610
/gate/source/Y90Source/gps/histpoint    0.560  611
/gate/source/Y90Source/gps/histpoint    0.566  612
/gate/source/Y90Source/gps/histpoint    0.573  613
/gate/source/Y90Source/gps/histpoint    0.579  614
/gate/source/Y90Source/gps/histpoint    0.586  615
/gate/source/Y90Source/gps/histpoint    0.592  616
/gate/source/Y90Source/gps/histpoint    0.599  617
/gate/source/Y90Source/gps/histpoint    0.605  618
/gate/source/Y90Source/gps/histpoint    0.612  619
/gate/source/Y90Source/gps/histpoint    0.619  620
/gate/source/Y90Source/gps/histpoint    0.625  620
/gate/source/Y90Source/gps/histpoint    0.632  621
/gate/source/Y90Source/gps/histpoint    0.638  622
/gate/source/Y90Source/gps/histpoint    0.645  623
/gate/source/Y90Source/gps/histpoint    0.651  623
/gate/source/Y90Source/gps/histpoint    0.658  624
/gate/source/Y90Source/gps/histpoint    0.664  624
/gate/source/Y90Source/gps/histpoint    0.671  625
/gate/source/Y90Source/gps/histpoint    0.677  625
/gate/source/Y90Source/gps/histpoint    0.684  626
/gate/source/Y90Source/gps/histpoint    0.690  626
/gate/source/Y90Source/gps/histpoint    0.697  627
/gate/source/Y90Source/gps/histpoint    0.704  627
/gate/source/Y90Source/gps/histpoint    0.710  628
/gate/source/Y90Source/gps/histpoint    0.717  628
/gate/source/Y90Source/gps/histpoint    0.723  628
/gate/source/Y90Source/gps/histpoint    0.730  628
/gate/source/Y90Source/gps/histpoint    0.736  629
/gate/source/Y90Source/gps/histpoint    0.743  629
/gate/source/Y90Source/gps/histpoint    0.749  629
/gate/source/Y90Source/gps/histpoint    0.756  629
/gate/source/Y90Source/gps/histpoint    0.762  629
/gate/source/Y90Source/gps/histpoint    0.769  629
/gate/source/Y90Source/gps/histpoint    0.775  629
/gate/source/Y90Source/gps/histpoint    0.782  629
/gate/source/Y90Source/gps/histpoint    0.789  629
/gate/source/Y90Source/gps/histpoint    0.795  629
/gate/source/Y90Source/gps/histpoint    0.802  629
/gate/source/Y90Source/gps/histpoint    0.808  629
/gate/source/Y90Source/gps/histpoint    0.815  629
/gate/source/Y90Source/gps/histpoint    0.821  629
/gate/source/Y90Source/gps/histpoint    0.828  629
/gate/source/Y90Source/gps/histpoint    0.834  629
/gate/source/Y90Source/gps/histpoint    0.841  629
/gate/source/Y90Source/gps/histpoint    0.847  628
/gate/source/Y90Source/gps/histpoint    0.854  628
/gate/source/Y90Source/gps/histpoint    0.861  628
/gate/source/Y90Source/gps/histpoint    0.867  627
/gate/source/Y90Source/gps/histpoint    0.874  627
/gate/source/Y90Source/gps/histpoint    0.880  626
/gate/source/Y90Source/gps/histpoint    0.887  626
/gate/source/Y90Source/gps/histpoint    0.893  626
/gate/source/Y90Source/gps/histpoint    0.900  625
/gate/source/Y90Source/gps/histpoint    0.906  625
/gate/source/Y90Source/gps/histpoint    0.913  624
/gate/source/Y90Source/gps/histpoint    0.919  624
/gate/source/Y90Source/gps/histpoint    0.926  623
/gate/source/Y90Source/gps/histpoint    0.932  623
/gate/source/Y90Source/gps/histpoint    0.939  622
/gate/source/Y90Source/gps/histpoint    0.946  621
/gate/source/Y90Source/gps/histpoint    0.952  621
/gate/source/Y90Source/gps/histpoint    0.959  620
/gate/source/Y90Source/gps/histpoint    0.965  619
/gate/source/Y90Source/gps/histpoint    0.972  619
/gate/source/Y90Source/gps/histpoint    0.978  618
/gate/source/Y90Source/gps/histpoint    0.985  617
/gate/source/Y90Source/gps/histpoint    0.991  616
/gate/source/Y90Source/gps/histpoint    0.998  615
/gate/source/Y90Source/gps/histpoint    1.004  615
/gate/source/Y90Source/gps/histpoint    1.011  614
/gate/source/Y90Source/gps/histpoint    1.017  613
/gate/source/Y90Source/gps/histpoint    1.024  612
/gate/source/Y90Source/gps/histpoint    1.031  611
/gate/source/Y90Source/gps/histpoint    1.037  610
/gate/source/Y90Source/gps/histpoint    1.044  609
/gate/source/Y90Source/gps/histpoint    1.050  608
/gate/source/Y90Source/gps/histpoint    1.057  607
/gate/source/Y90Source/gps/histpoint    1.063  606
/gate/source/Y90Source/gps/histpoint    1.070  605
/gate/source/Y90Source/gps/histpoint    1.076  604
/gate/source/Y90Source/gps/histpoint    1.083  602
/gate/source/Y90Source/gps/histpoint    1.089  601
/gate/source/Y90Source/gps/histpoint    1.096  600
/gate/source/Y90Source/gps/histpoint    1.102  599
/gate/source/Y90Source/gps/histpoint    1.109  598
/gate/source/Y90Source/gps/histpoint    1.116  596
/gate/source/Y90Source/gps/histpoint    1.122  595
/gate/source/Y90Source/gps/histpoint    1.129  594
/gate/source/Y90Source/gps/histpoint    1.135  592
/gate/source/Y90Source/gps/histpoint    1.142  591
/gate/source/Y90Source/gps/histpoint    1.148  590
/gate/source/Y90Source/gps/histpoint    1.155  588
/gate/source/Y90Source/gps/histpoint    1.161  587
/gate/source/Y90Source/gps/histpoint    1.168  585
/gate/source/Y90Source/gps/histpoint    1.174  584
/gate/source/Y90Source/gps/histpoint    1.181  582
/gate/source/Y90Source/gps/histpoint    1.188  580
/gate/source/Y90Source/gps/histpoint    1.194  579
/gate/source/Y90Source/gps/histpoint    1.201  577
/gate/source/Y90Source/gps/histpoint    1.207  576
/gate/source/Y90Source/gps/histpoint    1.214  574
/gate/source/Y90Source/gps/histpoint    1.220  572
/gate/source/Y90Source/gps/histpoint    1.227  570
/gate/source/Y90Source/gps/histpoint    1.233  569
/gate/source/Y90Source/gps/histpoint    1.240  567
/gate/source/Y90Source/gps/histpoint    1.246  565
/gate/source/Y90Source/gps/histpoint    1.253  563
/gate/source/Y90Source/gps/histpoint    1.259  561
/gate/source/Y90Source/gps/histpoint    1.266  559
/gate/source/Y90Source/gps/histpoint    1.273  557
/gate/source/Y90Source/gps/histpoint    1.279  555
/gate/source/Y90Source/gps/histpoint    1.288  552
/gate/source/Y90Source/gps/histpoint    1.292  551
/gate/source/Y90Source/gps/histpoint    1.299  549
/gate/source/Y90Source/gps/histpoint    1.305  547
/gate/source/Y90Source/gps/histpoint    1.312  545
/gate/source/Y90Source/gps/histpoint    1.318  543
/gate/source/Y90Source/gps/histpoint    1.325  540
/gate/source/Y90Source/gps/histpoint    1.331  538
/gate/source/Y90Source/gps/histpoint    1.338  536
/gate/source/Y90Source/gps/histpoint    1.344  533
/gate/source/Y90Source/gps/histpoint    1.351  531
/gate/source/Y90Source/gps/histpoint    1.358  528
/gate/source/Y90Source/gps/histpoint    1.364  526
/gate/source/Y90Source/gps/histpoint    1.371  523
/gate/source/Y90Source/gps/histpoint    1.377  521
/gate/source/Y90Source/gps/histpoint    1.384  518
/gate/source/Y90Source/gps/histpoint    1.390  516
/gate/source/Y90Source/gps/histpoint    1.397  513
/gate/source/Y90Source/gps/histpoint    1.403  511
/gate/source/Y90Source/gps/histpoint    1.410  508
/gate/source/Y90Source/gps/histpoint    1.416  505
/gate/source/Y90Source/gps/histpoint    1.423  502
/gate/source/Y90Source/gps/histpoint    1.429  500
/gate/source/Y90Source/gps/histpoint    1.436  497
/gate/source/Y90Source/gps/histpoint    1.443  494
/gate/source/Y90Source/gps/histpoint    1.449  491
/gate/source/Y90Source/gps/histpoint    1.456  488
/gate/source/Y90Source/gps/histpoint    1.462  485
/gate/source/Y90Source/gps/histpoint    1.469  482
/gate/source/Y90Source/gps/histpoint    1.475  479
/gate/source/Y90Source/gps/histpoint    1.482  475
/gate/source/Y90Source/gps/histpoint    1.489  472
/gate/source/Y90Source/gps/histpoint    1.495  469
/gate/source/Y90Source/gps/histpoint    1.501  466
/gate/source/Y90Source/gps/histpoint    1.508  463
/gate/source/Y90Source/gps/histpoint    1.515  459
/gate/source/Y90Source/gps/histpoint    1.521  456
/gate/source/Y90Source/gps/histpoint    1.535  448
/gate/source/Y90Source/gps/histpoint    1.541  446
/gate/source/Y90Source/gps/histpoint    1.547  442
/gate/source/Y90Source/gps/histpoint    1.554  438
/gate/source/Y90Source/gps/histpoint    1.560  435
/gate/source/Y90Source/gps/histpoint    1.567  431
/gate/source/Y90Source/gps/histpoint    1.573  428
/gate/source/Y90Source/gps/histpoint    1.580  424
/gate/source/Y90Source/gps/histpoint    1.586  420
/gate/source/Y90Source/gps/histpoint    1.593  416
/gate/source/Y90Source/gps/histpoint    1.600  412
/gate/source/Y90Source/gps/histpoint    1.606  409
/gate/source/Y90Source/gps/histpoint    1.613  405
/gate/source/Y90Source/gps/histpoint    1.615  403
/gate/source/Y90Source/gps/histpoint    1.619  401
/gate/source/Y90Source/gps/histpoint    1.626  397
/gate/source/Y90Source/gps/histpoint    1.632  393
/gate/source/Y90Source/gps/histpoint    1.639  389
/gate/source/Y90Source/gps/histpoint    1.645  385
/gate/source/Y90Source/gps/histpoint    1.652  381
/gate/source/Y90Source/gps/histpoint    1.658  377
/gate/source/Y90Source/gps/histpoint    1.665  372
/gate/source/Y90Source/gps/histpoint    1.671  368
/gate/source/Y90Source/gps/histpoint    1.678  364
/gate/source/Y90Source/gps/histpoint    1.685  359
/gate/source/Y90Source/gps/histpoint    1.691  355
/gate/source/Y90Source/gps/histpoint    1.698  350
/gate/source/Y90Source/gps/histpoint    1.706  345
/gate/source/Y90Source/gps/histpoint    1.711  342
/gate/source/Y90Source/gps/histpoint    1.717  337
/gate/source/Y90Source/gps/histpoint    1.724  333
/gate/source/Y90Source/gps/histpoint    1.730  329
/gate/source/Y90Source/gps/histpoint    1.732  327
/gate/source/Y90Source/gps/histpoint    1.737  324
/gate/source/Y90Source/gps/histpoint    1.743  319
/gate/source/Y90Source/gps/histpoint    1.750  315
/gate/source/Y90Source/gps/histpoint    1.756  310
/gate/source/Y90Source/gps/histpoint    1.763  305
/gate/source/Y90Source/gps/histpoint    1.770  300
/gate/source/Y90Source/gps/histpoint    1.777  295
/gate/source/Y90Source/gps/histpoint    1.783  291
/gate/source/Y90Source/gps/histpoint    1.789  286
/gate/source/Y90Source/gps/histpoint    1.798  280
/gate/source/Y90Source/gps/histpoint    1.809  272
/gate/source/Y90Source/gps/histpoint    1.815  267
/gate/source/Y90Source/gps/histpoint    1.818  265
/gate/source/Y90Source/gps/histpoint    1.822  262
/gate/source/Y90Source/gps/histpoint    1.828  257
/gate/source/Y90Source/gps/histpoint    1.835  252
/gate/source/Y90Source/gps/histpoint    1.842  247
/gate/source/Y90Source/gps/histpoint    1.852  239
/gate/source/Y90Source/gps/histpoint    1.855  237
/gate/source/Y90Source/gps/histpoint    1.861  233
/gate/source/Y90Source/gps/histpoint    1.868  227
/gate/source/Y90Source/gps/histpoint    1.874  223
/gate/source/Y90Source/gps/histpoint    1.881  217
/gate/source/Y90Source/gps/histpoint    1.884  215
/gate/source/Y90Source/gps/histpoint    1.894  208
/gate/source/Y90Source/gps/histpoint    1.898  204
/gate/source/Y90Source/gps/histpoint    1.907  198
/gate/source/Y90Source/gps/histpoint    1.912  194
/gate/source/Y90Source/gps/histpoint    1.925  184
/gate/source/Y90Source/gps/histpoint    1.927  182
/gate/source/Y90Source/gps/histpoint    1.933  178
/gate/source/Y90Source/gps/histpoint    1.937  175
/gate/source/Y90Source/gps/histpoint    1.940  173
/gate/source/Y90Source/gps/histpoint    1.946  168
/gate/source/Y90Source/gps/histpoint    1.949  166
/gate/source/Y90Source/gps/histpoint    1.953  163
/gate/source/Y90Source/gps/histpoint    1.959  158
/gate/source/Y90Source/gps/histpoint    1.961  157
/gate/source/Y90Source/gps/histpoint    1.966  153
/gate/source/Y90Source/gps/histpoint    1.971  149
/gate/source/Y90Source/gps/histpoint    1.972  149
/gate/source/Y90Source/gps/histpoint    1.979  143
/gate/source/Y90Source/gps/histpoint    1.981  142
/gate/source/Y90Source/gps/histpoint    1.985  139
/gate/source/Y90Source/gps/histpoint    1.992  134
/gate/source/Y90Source/gps/histpoint    1.998  129
/gate/source/Y90Source/gps/histpoint    2.000  128
/gate/source/Y90Source/gps/histpoint    2.005  124
/gate/source/Y90Source/gps/histpoint    2.010  121
/gate/source/Y90Source/gps/histpoint    2.012  119
/gate/source/Y90Source/gps/histpoint    2.018  115
/gate/source/Y90Source/gps/histpoint    2.025  110
/gate/source/Y90Source/gps/histpoint    2.027  109
/gate/source/Y90Source/gps/histpoint    2.031  106
/gate/source/Y90Source/gps/histpoint    2.035  103
/gate/source/Y90Source/gps/histpoint    2.038  101
/gate/source/Y90Source/gps/histpoint    2.042   98.4
/gate/source/Y90Source/gps/histpoint    2.044   97.1
/gate/source/Y90Source/gps/histpoint    2.050   93
/gate/source/Y90Source/gps/histpoint    2.051   92.4
/gate/source/Y90Source/gps/histpoint    2.057   88.4
/gate/source/Y90Source/gps/histpoint    2.064   83.8
/gate/source/Y90Source/gps/histpoint    2.070   79.9
/gate/source/Y90Source/gps/histpoint    2.076   76
/gate/source/Y90Source/gps/histpoint    2.083   71.6
/gate/source/Y90Source/gps/histpoint    2.089   67.9
/gate/source/Y90Source/gps/histpoint    2.090   67.3
/gate/source/Y90Source/gps/histpoint    2.094   64.9
/gate/source/Y90Source/gps/histpoint    2.100   61.3
/gate/source/Y90Source/gps/histpoint    2.105   58.4
/gate/source/Y90Source/gps/histpoint    2.110   55.5
/gate/source/Y90Source/gps/histpoint    2.115   52.7
/gate/source/Y90Source/gps/histpoint    2.116   52.1
/gate/source/Y90Source/gps/histpoint    2.120   49.9
/gate/source/Y90Source/gps/histpoint    2.125   47.2
/gate/source/Y90Source/gps/histpoint    2.129   45
/gate/source/Y90Source/gps/histpoint    2.134   42.4
/gate/source/Y90Source/gps/histpoint    2.136   41.3
/gate/source/Y90Source/gps/histpoint    2.138   40.3
/gate/source/Y90Source/gps/histpoint    2.142   38.3
/gate/source/Y90Source/gps/histpoint    2.146   36.3
/gate/source/Y90Source/gps/histpoint    2.150   34.4
/gate/source/Y90Source/gps/histpoint    2.154   32.5
/gate/source/Y90Source/gps/histpoint    2.157   31.1
/gate/source/Y90Source/gps/histpoint    2.160   29.7
/gate/source/Y90Source/gps/histpoint    2.164   27.9
/gate/source/Y90Source/gps/histpoint    2.170   25.3
/gate/source/Y90Source/gps/histpoint    2.173   24.1
/gate/source/Y90Source/gps/histpoint    2.175   32.2
/gate/source/Y90Source/gps/histpoint    2.179   21.6
/gate/source/Y90Source/gps/histpoint    2.182   20.4
/gate/source/Y90Source/gps/histpoint    2.185   19.3
/gate/source/Y90Source/gps/histpoint    2.192   16.7
/gate/source/Y90Source/gps/histpoint    2.197   15
/gate/source/Y90Source/gps/histpoint    2.204   12.7
/gate/source/Y90Source/gps/histpoint    2.208   11.4
/gate/source/Y90Source/gps/histpoint    2.210   10.8
/gate/source/Y90Source/gps/histpoint    2.214    9.67
/gate/source/Y90Source/gps/histpoint    2.220    8.06
/gate/source/Y90Source/gps/histpoint    2.225    6.81
/gate/source/Y90Source/gps/histpoint    2.229    5.88
/gate/source/Y90Source/gps/histpoint    2.235    4.61
/gate/source/Y90Source/gps/histpoint    2.241    3.48
/gate/source/Y90Source/gps/histpoint    2.246    2.66
/gate/source/Y90Source/gps/histpoint    2.250    2.08
/gate/source/Y90Source/gps/histpoint    2.255    1.44
/gate/source/Y90Source/gps/histpoint    2.260    0.923
/gate/source/Y90Source/gps/histpoint    2.265    0.516
/gate/source/Y90Source/gps/histpoint    2.270    0.225
/gate/source/Y90Source/gps/histpoint    2.275    0.052
/gate/source/Y90Source/gps/histpoint    2.279    0.000889
/gate/source/Y90Source/gps/histpoint    2.280    0   


#/gate/source/Y90Source/setForcedUnstableFlag	true
#/gate/source/Y90Source/setForcedHalfLife 		230760 s

/gate/source/Y90Source/gps/arbint 				Lin
/gate/source/Y90Source/gps/type 				Volume
/gate/source/Y90Source/gps/shape 				Sphere
/gate/source/Y90Source/gps/radius 				0.125 mm
/gate/source/Y90Source/gps/centre 				0.0 0.0 0.0 cm
/gate/source/Y90Source/gps/angtype				iso
/gate/source/Y90Source/gps/mintheta				0. deg
/gate/source/Y90Source/gps/maxtheta 			180. deg
/gate/source/Y90Source/gps/minphi 				0. deg
/gate/source/Y90Source/gps/maxphi 				360. deg

/gate/source/Y90Source/gps/confine				source_vol
