
#=====================================================
# VERBOSITY
#=====================================================

/control/execute mac/verbose.mac


#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial Air

# Patient or waterbox
#/control/execute mac/waterbox.mac
/control/execute mac/patient.mac

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList emstandard_opt1
/gate/physics/addProcess RadioactiveDecay

/gate/physics/Gamma/SetCutInRegion      world 10 mm
/gate/physics/Electron/SetCutInRegion   world 10 mm
/gate/physics/Positron/SetCutInRegion   world 10 mm

/gate/physics/Gamma/SetCutInRegion      phantom 0.1 mm
/gate/physics/Electron/SetCutInRegion   phantom 0.1 mm
/gate/physics/Positron/SetCutInRegion   phantom 0.1 mm

/gate/physics/displayCuts


#=====================================================
# DETECTORS
#=====================================================

/gate/actor/addActor                     DoseActor  dose3D
/gate/actor/dose3D/save                  output/distrib.mhd
/gate/actor/dose3D/attachTo    	         phantom
/gate/actor/dose3D/stepHitType           random
/gate/actor/dose3D/setPosition           0 0 0 cm
/gate/actor/dose3D/setVoxelSize          4 4 4 mm
/gate/actor/dose3D/saveEveryNSeconds     60
/gate/actor/dose3D/enableEdep            true
/gate/actor/dose3D/enableUncertaintyEdep true
/gate/actor/dose3D/enableDose            true
/gate/actor/dose3D/enableUncertaintyDose false
/gate/actor/dose3D/enableNumberOfHits    false

/gate/actor/addActor                    EnergySpectrumActor  eneSpec
/gate/actor/eneSpec/save                output/eneSpec.root
/gate/actor/eneSpec/attachTo    	phantom
/gate/actor/eneSpec/energySpectrum/setNumberOfBins     200
/gate/actor/eneSpec/energySpectrum/setEmin            0 eV
/gate/actor/eneSpec/energySpectrum/setEmax            2.4 MeV

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/stat.txt
/gate/actor/stat/saveEveryNSeconds 20


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac


#=====================================================
# BEAMS
#=====================================================

#/control/execute mac/source-gps.mac
#/control/execute mac/source-vox.mac
/control/execute  mac/source-pointlike.mac

#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

#/tracking/verbose 1

/gate/application/setTotalNumberOfPrimaries 1000
/gate/application/start
